PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': 'test', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 1920]
  expName = tworatesteps
  exportHTML = on Save
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Routines
  Routine testTrial
    TextComponent testText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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      text:
        Any text

        including line breaks
    CodeComponent code
      Code Type = JS
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      Begin JS Routine:
        console.log(trialsLoop.thisN);
        console.log(taskLoop.thisN);
  Routine setup
    TextComponent setupText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Use your mouse to move to the white circles.

        Press SPACE to continue.
    KeyboardComponent setupResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent JScodeFix
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
        // Math related fixes
        pi = Math.PI;
        sin = Math.sin;
        cos = Math.cos;
        sqrt = Math.sqrt;
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
    CodeComponent selectionCode
      Code Type = JS
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      Begin JS Experiment:
        taskVer = Number.parseInt(expInfo["taskVer"]);
        if (Number.isNaN(taskVer)) {
            taskVer = 0
        }
        trialNum = 0;
        orderChoice = (taskVer % 6);
        rotationChoice = (Math.floor((taskVer / 12)) % 2);
        targetChoice = (Math.floor((taskVer / 6)) % 2);

        order = [[0,1,2],[0,1,3],[0,2,1],[0,2,3],[0,3,1],[0,3,2]][orderChoice];
        rotation = [[1, (- 1)], [(- 1), 1]][rotationChoice];
        targetAngles = [[[40,50,130,140], [40,50], [130,140]],[[40,50,130,140], [130,140], [40,50]]][targetChoice];

        // Vector containing number of trials
        trialnums = [24, 160, 160];
        //trialnums = [8, 14, 14];
        targetangle_deg = [];

        var tasktargets, taskangles, nblocks;

        for (var taskno = 0; taskno < 3; taskno++) {
            var tasktargets, taskangles, nblocks;
            tasktargets = [];
            taskangles = targetAngles[taskno];
            nblocks = trialnums[taskno] / taskangles.length;
            for (var blockno = 0; blockno < nblocks; blockno++) {
                var blockangles = taskangles.slice(0);
                util.shuffle(blockangles);
                tasktargets.push.apply(tasktargets, blockangles);
            }
            targetangle_deg[taskno] = tasktargets;
        }

        rotations_deg = [];

        var taskrotations, tasktype, modifier, phasetrials, phaserotations, taskrotations;
        for (var taskno = 0; taskno < 3; taskno++) {
            var taskrotations, tasktype, trialno;
            taskrotations = [];
            tasktype = order[taskno];
            if (tasktype == 0) {
                for (var trialno = 0; trialno < 12; trialno++) {
        //        for (var trialno = 0; trialno < 2; trialno++) {
                    taskrotations.push(0);
                }
                for (var trialno = 0; trialno < 12; trialno++) {
        //        for (var trialno = 0; trialno < 2; trialno++) {
                    taskrotations.push(NaN);
                }
            }
        /* abrupt */
            if (tasktype == 1) {
                modifier = rotation[taskno-1];
                phasetrials = [32,96, 8, 24];
        //        phasetrials = [2,8,2,2];
                phaserotations = [0, 30, -30, NaN];
                for (var phaseno = 0; phaseno < phasetrials.length; phaseno++) {
                    for (var trialno = 0; trialno < phasetrials[phaseno]; trialno++) {
                        taskrotations.push(phaserotations[phaseno] * modifier);
                    }
                }
            }
        /* ramped */
            if (tasktype == 2) {
                modifier = rotation[taskno-1];
                phasetrials = [32,48, 48, 8, 24];
        //        phasetrials = [2,4,4,2,2];
                phaserotations = [0, NaN, 30, -30, NaN];
                for (var phaseno = 0; phaseno < phasetrials.length; phaseno++) {
                    if (phaseno == 1) {
                        for (var trialno = 0; trialno < phasetrials[phaseno]; trialno++) {
                            taskrotations.push((trialno + 1) * 0.625 * modifier);
        //                    taskrotations.push((trialno + 1) * 7.5 * modifier);
                        }
                    } else {
                        for (trialno = 0; trialno < phasetrials[phaseno]; trialno++) {
                            taskrotations.push(phaserotations[phaseno] * modifier);
                        }
                    }
                }
            }
        /* stepped */
            if (tasktype == 3) {
                modifier = rotation[taskno-1];
                phasetrials = [32,24,24,24,24, 8, 24];
        //        phasetrials = [2,2,2,2,2, 2, 2];
                phaserotations = [0, 7.5,15,22.5,30, -30, NaN];
                for (var phaseno = 0; phaseno < phasetrials.length; phaseno++) {
                    for (var trialno = 0; trialno < phasetrials[phaseno]; trialno++) {
                        taskrotations.push(phaserotations[phaseno] * modifier);
                    }
                }
            }
            rotations_deg[taskno] = taskrotations;
        }

        console.log(rotations_deg);
        console.log(targetangle_deg);
  Routine instruction
    TextComponent instructionText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $taskInstruction
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    KeyboardComponent instructionResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent taskLoopVariable
      Code Type = JS
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      Begin JS Experiment:
        taskCounter = -1;
        //trialCounter = 0;
      Begin JS Routine:
        //trialCounter_task = 0;

        taskCounter++;
        trialCounter = 0;

        //console.log(taskCounter);
        //console.log(trialCounter_task);

        //taskInstruction = 'Familiarization task: \ntry everything out.\n\nPress SPACE to continue.';
        taskInstruction = ['Familiarization task: \ntry everything out.\n\nPress SPACE to continue.','First real task: \nask questions now.\n\nPress SPACE to continue.','Second real task: \ntake a short break to stretch.\n\nPress SPACE to continue.'][taskCounter];
  Routine end
    TextComponent endText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Your data will now be stored,
        please wait...
    CodeComponent end_code
      Code Type = JS
      End JS Experiment:
        // make this less confusing:
        win.closeFullScreen();
  Routine trial
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent cursorCode
      Code Type = JS
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      Begin JS Experiment:
        totalExperimentTrials = 24 + 160 + 160;


        //trialCounter = 0;
        //ang = NaN;
        //rtd = NaN;
        console.log("begin task");
      Begin JS Routine:
        win.mouseVisible = false;
        console.log("begin trial routine");

        /* set up workspace on each trial */

        screen_width = window.innerWidth;
        screen_height = window.innerHeight;
        // scale so shortest side == 1
        short_side = Math.min(screen_width, screen_height);
        screen_width  = screen_width / short_side;
        screen_height = screen_height / short_side;

        trimmed_width = (2/3) * screen_width;
        trimmed_height = (2/3) * screen_height;

        if ((trimmed_height*2) < trimmed_width) {
                trimmed_width = trimmed_height*2;
        } else {
                trimmed_height = trimmed_width/2;
        }

        home_target_distance = trimmed_height;
        cursor_radius = trimmed_height * 0.065; // or whatever was used
        stim_radius = trimmed_height * 0.065;
        homepos = [0, -0.35 * trimmed_height];
        homex = homepos[0];
        homey = homepos[1];
        trialHome.pos = homepos;

        /* end set up workspace */

        win.mouseVisible = false;
        console.log("begin trial routine");

        targetangle = targetangle_deg[taskCounter][trialCounter];
        targetangle_rad = (pi * (targetangle / 180));
        targetPos = [(cos(targetangle_rad) * home_target_distance)+homex, (sin(targetangle_rad) * home_target_distance)+homey];


        //homePos = [0, 0];
        targetOpacity = 0;
        homeOpacity = 0;
        cursorOpacity = 0.60;

        trialCursor.pos = [1.5, 1.5];
        trialMouse.pos = [1.5, 1.5]; // why both?

        homeStart = false;
        reachOut = false;

        step = 1;
        steps = [];
        cursorx_rel = [];
        cursory_rel = [];

        /* marius messed up until here */
        // not sure if the rest is needed:

        //cursorPosX = trialMouse.getPos()[0];
        //cursorPosY = trialMouse.getPos()[1];

        //theta = 0;
        previousTaskTrials = [0,24,184][taskCounter];
        trials_left = totalExperimentTrials - previousTaskTrials - trialCounter;
        trialText.text = (trials_left).toString();

        rotationangle = rotations_deg[taskCounter][trialCounter];
        rotationangle_rad = (pi * (rotationangle / 180));

        console.log('taskCounter: '+taskCounter);
        console.log('trialCounter: '+trialCounter);
        console.log('rotation angle: '+rotationangle);
        console.log(Number.isNaN(rotationangle));

        //showAngle.text = (rotationangle).toString();
      Each JS Frame:
        /* first we determine where the cursor should be: */

        mpx = trialMouse.getPos()[0];
        mpy = trialMouse.getPos()[1];

        // we record the relative mouse position (not cursor):
        cursorx_rel.append((mpx - homex) / home_target_distance);
        cursory_rel.append((mpy - homey) / home_target_distance);

        // if the rotation is NaN, we need to give error-clamped feedback:

        var mouse_home_distance = Math.sqrt((Math.pow((homex - mpx), 2) + Math.pow((homey - mpy), 2)));

        if (Number.isNaN(rotationangle)) {

            if (step == 2) {
                rx = (mouse_home_distance * cos(targetangle_rad)) + homex;
                ry = (mouse_home_distance * sin(targetangle_rad)) + homey;
                cursor_radius = stim_radius;
                cursorOpacity = 0.6;
            } else {
                if (mouse_home_distance > (0.25 * home_target_distance)) {
                    rx = homex;
                    ry = homey;
                    cursor_radius = mouse_home_distance * 2;
                    cursorOpacity = 0.1;
                } else {
                    rx = mpx;
                    ry = mpy;
                    cursor_radius = stim_radius;
                    cursorOpacity = 0.6;
                 }
            }
        } else {
            rx = ((mpx-homex) * cos(rotationangle_rad)) - ((mpy-homey) * sin(rotationangle_rad)) + homex;
            ry = ((mpx-homex) * sin(rotationangle_rad)) + ((mpy-homey) * cos(rotationangle_rad)) + homey;
            cursor_radius = stim_radius;
            cursorOpacity = 0.6;
        };

        cursorPos = [rx, ry];
        trialCursor.pos = cursorPos;

        steps.append(step);

        /* THEN we decide whether or not each step end-criterion is met: */



        CursorTargetDistance = Math.sqrt((Math.pow((trialCursor.pos[0] - trialTarget.pos[0]), 2) + Math.pow((trialCursor.pos[1] - trialTarget.pos[1]), 2)));
        CursorHomeDistance = Math.sqrt((Math.pow((trialCursor.pos[0] - trialHome.pos[0]), 2) + Math.pow((trialCursor.pos[1] - trialHome.pos[1]), 2)));
        //CursorTargetDistance = Math.sqrt((Math.pow((mpx - trialTarget.pos[0]), 2) + Math.pow((mpy - trialTarget.pos[1]), 2)));
        MouseHomeDistance = Math.sqrt((Math.pow((mpx - trialHome.pos[0]), 2) + Math.pow((mpy - trialHome.pos[1]), 2)));


        /* determine step and opacity of home and target for next frame */

        if ((! homeStart)) {
            homeOpacity = 1;
            targetOpacity = 0;
            step = 1;
            if ((MouseHomeDistance < (stim_radius/2))) {
                homeStart = true;
                //console.log(((("end step 1" + " (") + globalClock.getTime().toString()) + ")"));
            }
        }
        if (((! reachOut) && homeStart)) {
            homeOpacity = 0;
            targetOpacity = 1;
            step = 2;
            if ((CursorTargetDistance < (stim_radius/2))) {
                reachOut = true;
                //console.log(((("end step 2" + " (") + globalClock.getTime().toString()) + ")"));
            }
        }
        if (reachOut) {
            homeOpacity = 1;
            targetOpacity = 0;
            step = 3;
            if ((MouseHomeDistance < (stim_radius/2))) {
                //console.log(((("end step 3" + " (") + globalClock.getTime().toString()) + ")"));
                continueRoutine = false;
            }
        }
      End JS Experiment:
        console.log("end experiment");
      End JS Routine:
        thisExp.addData("step", steps);
        thisExp.addData("targetangle_deg", targetangle);
        thisExp.addData("rotation", rotationangle);
        thisExp.addData("task", taskCounter);
        thisExp.addData("trialNum", trialCounter);
        thisExp.addData("cursorx_rel", cursorx_rel);
        thisExp.addData("cursory_rel", cursory_rel);

        console.log("end routine");

        trialCounter++;
    PolygonComponent trialTarget
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (stim_radius, stim_radius)
      startVal [time (s)] = 0.0
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    PolygonComponent trialHome
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      pos [set every frame] = homepos
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (stim_radius, stim_radius)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $[-1,-1,-1]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 0
      nVertices = 180
      opacity [set every frame] = cursorOpacity
      pos [set every frame] = cursorPos
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = (cursor_radius, cursor_radius)
      startVal [time (s)] = 0.0
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    VariableComponent trialStep
      saveStartStop = False
      startExpValue = 0
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    TextComponent trialText
      letterHeight = 0.05
      pos [set every repeat] = (0, homey-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent testSkip
      allowedKeys = 'q','w','e','r','t','y','u','i','o','p','a','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent showAngle
      letterHeight = 0.025
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    Selected rows = $order
    conditionsFile = taskConds.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'famConds.xlsx'), ('taskVersion', 'Familiarization'), ('taskReps', 24)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Abrupt'), ('taskReps', 160)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Ramped'), ('taskReps', 160)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Stepped'), ('taskReps', 160)])]
    Routine instruction
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trialsLoop
  LoopTerminator taskLoop
  Routine end
